CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does startwith "corr")
    Name to assign these images:intensity
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cell")
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    Name to assign these objects:Cells
    Select the image type:Objects
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    Retain outlines of loaded objects?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureTexture:[module_num:5|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:intensity
    Select objects to measure:Cells
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:No
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    Measure images or objects?:Objects

ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Dropbox/Volker/Work/GitLab/ComparisonCP_haralick
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:c2_
    Overwrite existing files without warning?:No
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